PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Enable Escape = False
  Experiment info = {'participant': '', 'order': "['random', 1, 2, 3]", 'session': '001', 'study': '', 'group': 'A', 'qpid': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['img/continuum.png', 'blocks/long_demo/conds_file_full_1_shD.xlsx', 'blocks/long_demo/conds_file_full_3_shB.xlsx', 'blocks/long_demo/conds_file_full_3_shC.xlsx', 'blocks/long_demo/conds_file_full_3_shD.xlsx', 'blocks/long_demo/conds_file_full_2_shA.xlsx', 'blocks/long_demo/conds_file_full_2_shB.xlsx', 'blocks/long_demo/conds_file_full_2_shC.xlsx', 'blocks/long_demo/conds_file_full_2_shD.xlsx', 'blocks/long_demo/conds_file_full_3_shA.xlsx', 'blocks/long_demo/conds_file_full_1_shA.xlsx', 'blocks/long_demo/conds_file_full_1_shB.xlsx', 'blocks/long_demo/conds_file_full_1_shC.xlsx', 'blocks/short_demo/conds_file_full_3_shA.xlsx', 'blocks/short_demo/conds_file_full_3_shB.xlsx', 'blocks/short_demo/conds_file_full_3_shC.xlsx', 'blocks/short_demo/conds_file_full_3_shD.xlsx', 'blocks/short_demo/conds_file_full_2_shA.xlsx', 'blocks/short_demo/conds_file_full_2_shB.xlsx', 'blocks/short_demo/conds_file_full_2_shC.xlsx', 'blocks/short_demo/conds_file_full_2_shD.xlsx', 'blocks/short_demo/conds_file_full_1_shA.xlsx', 'blocks/short_demo/conds_file_full_1_shB.xlsx', 'blocks/short_demo/conds_file_full_1_shC.xlsx', 'blocks/short_demo/conds_file_full_1_shD.xlsx', 'blocks/blocks_order_longdemo2.xlsx', 'blocks/blocks_order_longdemo3.xlsx', 'blocks/blocks_order_shortdemo2.xlsx', 'blocks/blocks_order_shortdemo3.xlsx', 'blocks/blocks_order2.xlsx', 'blocks/blocks_order3.xlsx', 'blocks/blocks_order_longdemo1.xlsx', 'blocks/blocks_order_shortdemo1.xlsx', 'blocks/blocks_order1.xlsx', 'blocks/conds_file_full_2A.xlsx', 'blocks/conds_file_full_2B.xlsx', 'blocks/conds_file_full_2C.xlsx', 'blocks/conds_file_full_2D.xlsx', 'blocks/conds_file_full_3A.xlsx', 'blocks/conds_file_full_1A.xlsx', 'blocks/conds_file_full_1B.xlsx', 'blocks/conds_file_full_1C.xlsx', 'blocks/conds_file_full_1D.xlsx', 'blocks/conds_file_full_3D.xlsx', 'blocks/conds_file_full_3C.xlsx', 'blocks/conds_file_full_3B.xlsx', 'img/go.png', 'instructions.xlsx', 'img/p100.png', 'img/p25.png', 'img/p75.png', 'img/p50.png', 'img/none.png', 'img/2/CSminus.png', 'img/2/CSplus1.png', 'img/2/CSplus1nTheta.png', 'img/2/CSplus1pTheta.png', 'img/2/CSplus2.png', 'img/2/CSplus2nTheta.png', 'img/2/CSplus2pTheta.png', 'img/1/CSplus1pTheta.png', 'img/1/CSplus2.png', 'img/1/CSplus2nTheta.png', 'img/1/CSplus2pTheta.png', 'img/1/CSminus.png', 'img/1/CSplus1.png', 'img/1/CSplus1nTheta.png', 'img/none.png', 'img/thud.wav', 'img/falling.wav', 'img/next.png', 'img/start.png', 'img/shield.png', 'img/stone.png', 'img/tap.png', 'img/road22.png', 'img/dashboard.png', 'img/noLost.png', 'img/notSpiky.png', 'img/spiky.png']
  Screen = 1
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [1920, 1080]
  color = black
  expName = IAT-1.4
  logging level = debug
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Routines
  Routine feedback
    CodeComponent generate_msg
      Code Type = Auto->JS
    ImageComponent feedback_image
      image = None
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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  Routine end_thanks
    TextComponent thanks_text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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      text:
        Thanks for playing.

        Do NOT press the ‘escape’ key.

        Saving results, please wait…
  Routine keep_in_mind
    TextComponent keep_in_mind_txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
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      text:
        Keep in mind:

        1) Labels at the top of the screen indicate which catogory goes with which key.

        2) Each word or image has a correct catogory classification

        3) Keep your index fingers on the A and L keys to enable a rapid response.

        4) The test gives no results if you go slow- please try to go as fast as possible
    KeyboardComponent keep_in_mind_done
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent keep_in_btn
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent keep_in_label
      color = darkgreen
      letterHeight = 0.08
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Next...
      units = height
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    MouseComponent mouse
      clickable = keep_in_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions
    CodeComponent code_instr
      Code Type = Auto->JS
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      Begin Routine:
        #set images and sounds
        tap_vis=TapVis[trials_2.thisN];
        next_vis=NextVis[trials_2.thisN];
        next_pos2 = (0,next_pos[trials_2.thisN]);
        Image1Pos2 = (0,Image1Pos[trials_2.thisN]);
        Image2Pos2 = (0,Image2Pos[trials_2.thisN]);
        Image1Size2 = (Image1Size[trials_2.thisN],Image1Size[trials_2.thisN]);
        Image2Size2 = (Image2Size[trials_2.thisN],Image2Size[trials_2.thisN]);
        if Image2 == 'img/continuum.png':
            Image2Size2 = (Image2Size[trials_2.thisN],Image2Size[trials_2.thisN]/2);
        Vis1_bool = Image1Vis[trials_2.thisN];
        Vis2_bool = Image2Vis[trials_2.thisN];
        rock_fall_instr = rockSound[trials_2.thisN];
        shield_instr = shieldSound[trials_2.thisN];

        #play sounds
        rock_played = 0
        shield_played = 0
        if (rock_played==0) and (rock_fall_instr==1):
            rock_played = 1
            rock_sound_obj.play()
        if (shield_played==0) and (shield_instr==1):
            shield_played = 1
            shield_sound_obj.play()
      Each Frame:
        if (tap_vis==1) and tap_me_click.isPressedIn(Img1,buttons=[0]):
            continueRoutine = False
    ImageComponent image_road
      image = img/road22.png
      pos = (0, -.15)
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent instructs_text
      letterHeight = 0.04
      opacity [set every repeat] = 1
      pos = [0, 0.35]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instruction
      units = height
      wrapWidth = 0.6
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    MouseComponent instr_done_touch
      clickable = next_img
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent next_img
      image = img/next.png
      opacity [set every repeat] = next_vis
      pos [set every repeat] = $next_pos2
      size = (0.3, 0.092)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent tap_me_click
      clickable = Img1
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    ImageComponent Img1
      image [set every repeat] = $Image1
      opacity [set every repeat] = Vis1_bool
      pos [set every repeat] = Image1Pos2
      size [set every repeat] = Image1Size2
      startVal [time (s)] = 0.0
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    ImageComponent Img2
      image [set every repeat] = $Image2
      opacity [set every repeat] = Vis2_bool
      pos [set every repeat] = Image2Pos2
      size [set every repeat] = Image2Size2
      startVal [time (s)] = 0.0
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    ImageComponent tap_me
      image = img/tap.png
      opacity [set every repeat] = tap_vis
      ori = 45
      pos = (0.05,-0.37)
      size = (0.07,0.07)
      startVal [time (s)] = 0.0
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  Routine pop_2
    CodeComponent generate_msg_2
      Code Type = Auto->JS
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      Begin Routine:
        # show outcome img
        feedback_pt = ''
        rock_sound = 0
        shield_sound = 0

        if outcome == -1:
            img_outcome.setImage('img/stone.png')
            feedback_pt = '-10'
            rock_sound = 1
        else:
            img_outcome.setImage('img/noLost.png')

        if (outcome==0) and (shield_pressed==1):
            big_shield2_vis = 1
            feedback_pt = '-2'
            shield_sound = 1
    ImageComponent background_2
      image = img/road22.png
      pos = (0, -.15)
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent feedback_text
      color = red
      letterHeight = 0.08
      pos = (-0.01,-0.39)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_pt
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    ImageComponent img_outcome
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent big_shield_2
      image = img/shield.png
      opacity [set every repeat] = big_shield2_vis
      pos = (0, 0.05)
      size = (0.37, 0.37)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent rock_wav
      sound = img/falling.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      volume [set every repeat] = rock_sound
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    SoundComponent shield_wav
      sound = img/thud.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      volume [set every repeat] = shield_sound
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  Routine instruct_img
    ImageComponent image
      image = instruction.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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  Routine instructions_2
    TextComponent instructs_text_2
      color = black
      letterHeight = 0.03
      pos = [0, -0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Every time you get hit by a stone you lose 10 points in this game. However, you can put up a protective shield on your car to protect you every time you pass a sign. However, this shield costs you 5 points to put up, so you only want to use it when you think you are in danger.
      units = height
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    KeyboardComponent instruct_done_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent instr_done_button_2
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instr_done_label_2
      color = darkgreen
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Next...
      units = height
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    MouseComponent instr_done_touch_2
      clickable = instr_done_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = img/instru1.png
      pos = (0, .15)
      size = (0.7, 0.46)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine trial
    ImageComponent background_1
      image = img/road22.png
      pos = (0, -.15)
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    MouseComponent touch_resp
      clickable = button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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    CodeComponent check_correct
      Code Type = Both
      Before Experiment:
        import numpy as np

        # set press counter
        points = 0

        # set cash counter
        cash_left = 600
        loss_amount = 10
        press_loss = 2

        # set sequence
        cond = str(int(np.floor(np.random.rand(1)[0] * 2)+1))
      Before JS Experiment:
        var cash_left, loss_amount, points, press_loss, cond;
        points = 0;
        cash_left = 600;
        loss_amount = 10;
        press_loss = 2;
        cond = (Math.floor(Math.random() * 2)+1).toString();
      Begin JS Routine:
        //CS = [];
        CS=0;
        button_vis=1;
        shield_pressed = 0;
        big_shield2_vis=0;
        rt=0;
        if ((tts === 1)) {
            img.setImage((("img/" + cond) + "/CSminus.png"));
        //    CS.push(4);
            CS=4;
        } else {
            if (((tts === 2) || (tts === 3))) {
                img.setImage((("img/" + cond) + "/CSplus1.png"));
                CS=2;
            } else {
                if (((tts === 4) || (tts === 5))) {
                    img.setImage((("img/" + cond) + "/CSplus2.png"));
                    CS=6;
                } else {
                    if ((tts === 6)) {
                        img.setImage((("img/" + cond) + "/CSplus1nTheta.png"));
                        CS=1;
                    } else {
                        if ((tts === 7)) {
                            img.setImage((("img/" + cond) + "/CSplus1pTheta.png"));
                            CS=3;
                        } else {
                            if ((tts === 8)) {
                                img.setImage((("img/" + cond) + "/CSplus2nTheta.png"));
                                CS=5
                            } else {
                                if ((tts === 9)) {
                                    img.setImage((("img/" + cond) + "/CSplus2pTheta.png"));
                                    CS=7
                                }
                            }
                        }
                    }
                }
            }
        }
        //point1.setText(("Current press count: " + points.toString()));
        //cash1.setText(("Total points: " + cash_left.toString()));
        //
      Begin Routine:
        # set path
        button_vis=1;
        shield_pressed = 0;
        big_shield2_vis=0;
        rt=0
        if tts == 1:
            img.setImage('img/' + cond + "/CSminus.png")
            CS = 4
        elif tts == 2 or tts == 3:
            img.setImage("img/" + cond + "/CSplus1.png")
            CS = 2
        elif tts == 4 or tts == 5:
            img.setImage("img/" + cond + "/CSplus2.png")
            CS = 6
        elif tts == 6:
            img.setImage("img/" + cond + "/CSplus1nTheta.png")
            CS = 1
        elif tts == 7:
            img.setImage("img/" + cond + "/CSplus1pTheta.png")
            CS = 3
        elif tts == 8:
            img.setImage("img/" + cond + "/CSplus2nTheta.png")
            CS = 5
        elif tts == 9:
            img.setImage("img/" + cond + "/CSplus2pTheta.png")
            CS = 7

        # show cash
        cash_left = np.round(cash_left, 2)
        #cash1.setText('Total points: '+str(cash_left))
      Each Frame:
        mouse_down_detected = False
        mouse_click = touch_resp.getPressed()

        if mouse_click[0]: # button 0 is pressed
            if not mouse_down_detected: # initial detection
                mouse_loc = touch_resp.getPos()
        #        mouse_click_locations.append(mouse_loc)
                mouse_down_detected = True


        else:
            mouse_down_detected = False
      Each JS Frame:
        mouse_down_detected = false;
        mouse_click = touch_resp.getPressed();
        if (mouse_click[0]) {
            if ((! mouse_down_detected)) {
                mouse_loc = touch_resp.getPos();
                mouse_down_detected = true;
            }
        } else {
            mouse_down_detected = false;
        }
      End JS Routine:
        if ((mouse_down_detected === true)) {
            points += 1;
            shield_pressed = 1;
            cash_left -= press_loss
            rt = touch_resp.time[0]
        } else {
            points += 0;
            shield_pressed = 0;
        }
        if (((mouse_down_detected === false) && (tts === 2))) {
            outcome = (- 1);
            cash_left -= loss_amount;
        } else {
            if (((mouse_down_detected === false) && (tts === 4))) {
                outcome = (- 1);
                cash_left -= loss_amount;
            } else {
                outcome = 0;
            }
        }
        psychoJS.experiment.addData("cue", CS);
        psychoJS.experiment.addData("choice", shield_pressed);
        psychoJS.experiment.addData("rt", rt);
        psychoJS.experiment.addData("outcome", outcome);
        psychoJS.experiment.addData("shield_count", points);
        psychoJS.experiment.addData("cash_left", cash_left);
        psychoJS.experiment.addData("cond", cond);
      End Routine:
        # mosue click detection

        if mouse_down_detected==True:
            points += 1
            shield_pressed = 1;
            cash_left -= press_loss
            rt = touch_resp.time[0]  # annoyingly mouse is a list of rts
        else:
            points += 0
            shield_pressed = 0;

        # determine outcome
        if mouse_down_detected==False and tts==2:
            outcome = -1
            cash_left -= loss_amount
        elif mouse_down_detected==False and tts==4:
            outcome = -1
            cash_left -= loss_amount
        else:
            outcome = 0

        # saving data
        thisExp.addData('cue', CS)
        thisExp.addData('choice', shield_pressed)
        thisExp.addData('rt', rt)
        thisExp.addData('outcome', outcome)
        thisExp.addData('shield_count', points)
        thisExp.addData('cash_left', cash_left)
        thisExp.addData('cond', cond)
    ImageComponent button
      image = img/shield.png
      pos = (0,-0.39)
      size = (0.17, 0.17)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent img
      image = None
      size = (0.3, 0.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      texture resolution = 512
      units = height
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  Routine fixation_2
    ImageComponent background_0
      image = img/road22.png
      pos = (0, -.15)
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine setup
    CodeComponent code_JS
      Code Type = JS
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      Begin JS Experiment:
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
        event = psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;

        shield_sound_obj = new sound.Sound({
            win: psychoJS.window,
            value: 'img/thud.wav',
            secs: 1.0,
            });
        shield_sound_obj.setVolume(1.0);
        rock_sound_obj = new sound.Sound({
            win: psychoJS.window,
            value: 'img/falling.wav',
            secs: 1.0,
            });
        rock_sound_obj.setVolume(1.0);
    CodeComponent init_array
      Code Type = Auto->JS
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      Begin Experiment:
        Image1Pos = (0,0.05,0.05,-0.39,-0.39,-1,-0.39,-0.39);
        Image1Size = (0,0.3,0.3,0.17,0.17,0,0.17,0.17);
        Image2Pos = (0, 0, 0, 0, 0, 0.05,0.05,0.05);
        Image2Size = (0, 0, 0, 0, 0, 0.37,0.3,0.375);
        Image1Vis = (0,1,1,1,1,0,1,1)
        Image2Vis = (0,0,0,0,0,1,1,1)
        TapVis = (0,0,0,0,1,0,0,0);
        NextVis = (1,1,1,1,0,1,1,1)
        progress = 0;
        next_pos = (-0.185, -0.185, -0.185, -0.185, -1, -0.185,-0.185,-0.185);
        rockSound = (0,1,0,0,0,0,0,0);
        shieldSound = (0,0,0,0,0,1,0,0);
    CodeComponent python_sound
      Code Type = Py
      Begin Experiment:
        shield_sound_obj = sound.Sound('img/thud.wav')
        rock_sound_obj = sound.Sound('img/falling.wav')
  Routine final_score
    TextComponent score
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        score.setText('You have earned '+str(cash_left)+' points!'+
        '\nWell done!')
  Routine block_score
    TextComponent text
      color = darkgreen
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $break_dur
      text [set every frame] = $timer_text
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    TextComponent block_cash
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $break_dur
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        txt_part = ' '
      Begin Routine:
        progress = progress + 25;
        progImg.setImage("img/p"+str(progress)+".png")
        # calculate block loss
        #press_loss = 2
        #block_loss = points * press_loss

        # block remaining
        #cash_left = cash_left - block_loss

        if progress <100:
            txt_part = 'Well done! You are '+str(progress)+'% through! Keep going!'
            block_cash.setText(
            txt_part
            +'\n'+
            '\nYour current total remaining is '+str(cash_left)+' points.'+
            '\n'+
            '\nTake a short rest and get ready to play.')
        if progress==100:
            txt_part = 'Well done! You have finished the game. Please wait.'
            block_cash.setText(
            txt_part
            +'\n'+
            '\nYour total remaining is '+str(cash_left)+' points.')
        ## reset count
        #points = 0
    ImageComponent progImg
      image = None
      pos = (0, -0.39)
      size = (0.5, 0.0758)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $break_dur
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        timer_text = ''
      Each Frame:
        countdown = round(break_dur-0.5-t)
        if progress==100:
            timer_text = '';
            continueRoutine = False;
        if countdown==0:
            if progress==100:
                timer_text=""
            else:
                timer_text="Go!"
        else:
        #    if progress==100:
        #        timer_text = "The game will end in: "+str(countdown) + ' seconds.'
        #    else:
            timer_text="The task will start again in: "+str(countdown) + ' second(s).'
  Routine start_button
    CodeComponent set_breaks
      Code Type = Auto->JS
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      Begin Experiment:
        break_dur = 9
        #break_dur = 1;
      Begin Routine:
        if progress>0:
            start_img.setImage("img/go.png")
        else:
            start_img.setImage("img/start.png")
      Each Frame:
        countdown = round(1-t)
        if countdown==0 and progress>0:
            continueRoutine = False;
    ImageComponent start_img
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent start_press
      clickable = start_img
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine instructions_3
    TextComponent instructs_text_3
      color = black
      letterHeight = 0.03
      pos = [0, -0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = At the beginning of the game you start off with 600 points. The aim of the game is to finish with as many points as possible - by avoiding the stones but not over-using your shield. This means you need to look carefully at the signs and try and work out whether you think it is supposed to be a safe sign or a danger sign.
      units = height
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    KeyboardComponent instruct_done_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent instr_done_button_3
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instr_done_label_3
      color = darkgreen
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Next...
      units = height
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    MouseComponent instr_done_touch_3
      clickable = instr_done_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      image = img/instru2.png
      pos = (0, .15)
      size = (0.7, 0.46)
      startVal [time (s)] = 0.0
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  Routine instructions_4
    TextComponent instructs_text_4
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        The best strategy is to use shield if you think it is a ‘dangerous’ sign, but do not touch it if you think it is a ‘safe’ one.

        There will be 5 blocks of shapes in total, each block will take around 3 minutes to complete. You can take a short break in between each block, then press Start to begin again.

        Good luck!
    KeyboardComponent instruct_done_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent instr_done_button_4
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instr_done_label_4
      color = darkgreen
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Next...
      units = height
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    MouseComponent instr_done_touch_4
      clickable = instr_done_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine quiz_0
    TextComponent instructs_text_5
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        You will now be asked a few questions to check that you understood the instructions

        For each following statement, please select whether you think it is True or False
    KeyboardComponent instruct_done_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent instr_done_button_5
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instr_done_label_5
      color = darkgreen
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Next...
      units = height
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    MouseComponent instr_done_touch_5
      clickable = instr_done_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine quiz_main
    TextComponent instructs_text_6
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
      units = height
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    PolygonComponent true_button
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (-0.3, -0.2)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent true_label
      color = darkgreen
      letterHeight = 0.05
      pos = (-0.3, -0.2)
      startVal [time (s)] = 0.0
      text = True
      units = height
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    MouseComponent true_touch_response
      clickable = true_button, false_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent false_button
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0.3, -0.2)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent false_label
      color = darkgreen
      letterHeight = 0.05
      pos = (0.3, -0.2)
      startVal [time (s)] = 0.0
      text = False
      units = height
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        nCorrResp = 0
      Each Frame:
        true_answer_detected = False
        false_answer_detected = False

        true_click = true_touch_response.getPressed()

        if true_click[0]:
            click_loc = true_touch_response.getPos()
            if click_loc[0]<0 and true_answer_detected==False: # initial detection
                true_answer_detected = True
            elif click_loc[0]>0 and false_answer_detected==False: # initial detection
                false_answer_detected = True
        #    else:
        #        true_answer_detected = False
        #        false_answer_detected = False
        else:
            true_answer_detected = False
            false_answer_detected = False
      End Routine:
        # determine answer correct
        if true_answer_detected==True and corrAns==1:
            answer_outcome = 1
            nCorrResp += 1
        elif true_answer_detected==True and corrAns==0:
            answer_outcome = 0
        elif false_answer_detected==True and corrAns==1:
            answer_outcome = 0
        elif false_answer_detected==True and corrAns==0:
            answer_outcome = 1
            nCorrResp += 1
        else:
            answer_outcome = 0
  Routine quiz_feedback
    TextComponent correct_text
      color = green
      letterHeight = 0.1
      pos = (-0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # show outcome text
        if answer_outcome == 1:
            correct_text.setText('Correct!')
            correct_text.setColor('darkgreen', colorSpace='rgb')
        else:
            correct_text.setText('Incorrect!')
            correct_text.setColor('red', colorSpace='rgb')
  Routine quiz_score
    TextComponent quiz_score_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent instruct_done_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent instr_done_button_6
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instr_done_label_6
      color = darkgreen
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Next...
      units = height
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    MouseComponent instr_done_touch_6
      clickable = instr_done_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        # print quiz score
        if nCorrResp >= 3:
            quiz_score_text.setText(
            'End of quiz. Well done!'+
            '\nYou answered '+str(nCorrResp)+' out of 5 questions correctly.\n'+
            '\n'+
            '\nTake a minute to rest and press Next when you are ready to start.')
            trials_3.finished = True
        else:
            quiz_score_text.setText(
            'End of quiz.'+
            '\nUnfortunately you only answered '+str(nCorrResp)+' out of 5 questions correctly.\n'+
            '\n'+
            '\nTake a minute to rest and press Next to read the instructions again. Thank you.')
  Routine welcome
    ImageComponent welcome_next
      image = img/next.png
      pos = (0,-0.185)
      size = (0.3, 0.092)
      startVal [time (s)] = 0.0
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    MouseComponent welcome_click
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent welcome_text
      letterHeight = 0.04
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
      wrapWidth = 0.6
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      text:
        Welcome to the ‘Stay safe’ game!

        The task should take about 15 minutes.

        There will be three breaks.

        Please make sure you understand the instructions on the next page before you start.
    CodeComponent set_blocks
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['order']=='random':
            expInfo['order'] = randint(1,3)
            order_var = expInfo['order']

        blocks_file = "blocks/blocks_order"+str(expInfo['order'])+".xlsx"
        #blocks_file = "blocks/blocks_order_longdemo"+str(expInfo['order'])+".xlsx"
        #blocks_file = "blocks/blocks_order_shortdemo"+str(expInfo['order'])+".xlsx"
  Routine info
    TextboxComponent textbox
      bold = False
      borderColor = aqua
      editable = True
      fillColor = grey
      letterHeight = 0.05
      lineSpacing = 1
      padding = 0.1
      pos = (0, 0.33)
      size = (1,0.12)
      startVal [time (s)] = 0.0
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    ImageComponent next_info
      image = img/next.png
      pos = (0, -0.185)
      size = (0.3, 0.092)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_info
      clickable = next_info
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.08
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Please enter your ID.
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    CodeComponent code_8
      Code Type = JS
      End JS Routine:
        psychoJS.experiment.addData("pid", textbox._pixi.text);
Flow
  Routine setup
  Routine welcome
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Instruction': 'You are driving along a dangerous road in a foreign country. You have 600 coins.', 'Image1': 'img/shield_dash.png', 'Image2': 'img/shield_dash.png'},
      {'Instruction': 'You are in danger to be hit by large rocks. When a rock falls on you, you will lose 10 coins.', 'Image1': 'img/stone.png', 'Image2': 'img/shield_dash.png'},
      {'Instruction': "Road signs indicate whether the road is dangerous or safe. The problem is that you don't know in advance what the signs mean, and sometimes they can be a bit unclear.", 'Image1': 'img/spiky.png', 'Image2': 'img/shield_dash.png'},
      {'Instruction': 'When you see a sign, you can deploy a shield to protect yourself from the rocks, at the cost of 2 points each.', 'Image1': 'img/shield_dash.png', 'Image2': 'img/shield_dash.png'},
      {'Instruction': 'Simply tap on the shield to deploy it. Your shield usage and coins will be displayed.', 'Image1': 'img/shield_dash.png', 'Image2': 'img/shield_dash.png'},
      {'Instruction': 'You need to save as many coins as you can. You will need to figure out which signs indicate danger in order to deploy the shield to protect yourself.', 'Image1': 'img/shield_dash.png', 'Image2': 'img/notSpiky.png'}]
    Routine instructions
  LoopTerminator trials_2
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $blocks_file
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine start_button
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = sequential
      nReps = 1
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      Routine fixation_2
      Routine trial
      Routine pop_2
    LoopTerminator trials
    Routine block_score
  LoopTerminator blocks
  Routine final_score
  Routine end_thanks
